<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="reactor_1"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="deionized water"
      id="deionized water"
      role="reagent" />
    <Reagent
      name="sodium citrate (10.0 mg/mL)"
      id="sodium citrate (10.0 mg/mL)"
      role="reagent" />
    <Reagent
      name="sodium tetrachloroaurate (NaAuCl4) (0.125 M)"
      id="sodium tetrachloroaurate (NaAuCl4) (0.125 M)"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor_1"
      reagent="deionized water"
      volume="94.6 mL"
      amount="94.6 mL" />
    <Add
      vessel="reactor_1"
      reagent="sodium tetrachloroaurate (NaAuCl4) (0.125 M)"
      volume="420.0 µL"
      stir="True"
      stir_speed="300.0 rpm"
      amount="420.0 µL" />
    <HeatChillToTemp
      vessel="reactor_1"
      temp="90.0 °C"
      stir_speed="300.0 rpm" />
    <Add
      vessel="reactor_1"
      reagent="sodium citrate (10.0 mg/mL)"
      volume="5.0 mL"
      stir="True"
      stir_speed="300.0 rpm"
      amount="5.0 mL" />
    <HeatChill
      vessel="reactor_1"
      time="20.0 min"
      temp="90.0 °C"
      stir_speed="300.0 rpm" />
    <HeatChillToTemp
      vessel="reactor_1"
      temp="20.0 °C"
      stir="False" />
    <HeatChillToTemp
      vessel="reactor_1"
      temp="4.0 °C"
      stir="False" />
  </Procedure>

</Synthesis>

</XDL>
