<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="reactor1"
      type="reactor" />
    <Component
      id="reactor2"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="(NH4)6 Mo7O24 4H2O"
      id="(NH4)6 Mo7O24 4H2O"
      role="reagent" />
    <Reagent
      name="CH3COOH (50.0 %)"
      id="CH3COOH (50.0 %)"
      role="reagent" />
    <Reagent
      name="CH3COONH4"
      id="CH3COONH4"
      role="reagent" />
    <Reagent
      name="H2O"
      id="H2O"
      role="reagent" />
    <Reagent
      name="N2H6 SO4"
      id="N2H6 SO4"
      role="reagent" />
    <Reagent
      name="diethyl ether"
      id="diethyl ether"
      role="reagent" />
    <Reagent
      name="ethanol (90.0 %)"
      id="ethanol (90.0 %)"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor1"
      reagent="H2O"
      volume="250.0 mL"
      amount="250.0 mL" />
    <Add
      vessel="reactor1"
      reagent="(NH4)6 Mo7O24 4H2O"
      mass="5.6 g"
      amount="5.6 g" />
    <Add
      vessel="reactor1"
      reagent="CH3COONH4"
      mass="12.5 g"
      amount="12.5 g" />
    <Add
      vessel="reactor1"
      reagent="N2H6 SO4"
      mass="0.8 g"
      amount="0.8 g" />
    <Stir
      vessel="reactor1"
      time="10.0 min"
      stir_speed="300.0 rpm" />
    <Add
      vessel="reactor1"
      reagent="CH3COOH (50.0 %)"
      volume="83.0 mL"
      amount="83.0 mL" />
    <Transfer
      from_vessel="reactor1"
      to_vessel="reactor2"
      volume="all"
      amount="all" />
    <HeatChill
      vessel="reactor2"
      time="4.0 days"
      temp="20.0 ℃"
      stir="False" />
    <Filter
      vessel="reactor2"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 ℃" />
    <WashSolid
      vessel="reactor2"
      solvent="ethanol (90.0 %)"
      volume="appropriate"
      filtrate_vessel="waste"
      stir="False" />
    <WashSolid
      vessel="reactor2"
      solvent="diethyl ether"
      volume="appropriate"
      filtrate_vessel="waste"
      stir="False" />
    <Dry
      vessel="reactor2"
      pressure="1 bar"
      temp="20.0 ℃" />
  </Procedure>

</Synthesis>

</XDL>
