<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="reactor1"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="Co(NO3)2·6H2O"
      id="Co(NO3)2·6H2O"
      role="reagent" />
    <Reagent
      name="Na2HPO4·7H2O"
      id="Na2HPO4·7H2O"
      role="reagent" />
    <Reagent
      name="Na2WO4·2H2O"
      id="Na2WO4·2H2O"
      role="reagent" />
    <Reagent
      name="NaCl"
      id="NaCl"
      role="reagent" />
    <Reagent
      name="deionized water"
      id="deionized water"
      role="reagent" />
    <Reagent
      name="hydrochloric acid solution"
      id="hydrochloric acid solution"
      role="reagent" />
    <Reagent
      name="{'acid': 'hydrochloric acid solution', 'base': 'None'}"
      id="{'acid': 'hydrochloric acid solution', 'base': 'None'}"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor1"
      reagent="Na2WO4·2H2O"
      mass="17.81 g"
      amount="17.81 g" />
    <Add
      vessel="reactor1"
      reagent="Na2HPO4·7H2O"
      mass="1.6099999999999999 g"
      amount="1.6099999999999999 g" />
    <Add
      vessel="reactor1"
      reagent="Co(NO3)2·6H2O"
      mass="3.49 g"
      amount="3.49 g" />
    <Add
      vessel="reactor1"
      reagent="deionized water"
      volume="50.0 mL"
      stir="True"
      amount="50.0 mL" />
    <AdjustPH
      vessel="reactor1"
      reagent="{'acid': 'hydrochloric acid solution', 'base': 'None'}"
      pH="7.0" />
    <HeatChill
      vessel="reactor1"
      time="7200.0 second"
      temp="100.0 °C" />
    <Add
      vessel="reactor1"
      reagent="NaCl"
      mass="saturate"
      stir="True"
      amount="saturate" />
    <HeatChillToTemp
      vessel="reactor1"
      temp="20.0 °C"
      stir="False" />
    <Filter
      vessel="reactor1"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 °C" />
    <WashSolid
      vessel="reactor1"
      solvent="deionized water"
      volume="15.0 mL"
      filtrate_vessel="waste"
      stir="False" />
    <CrystallizeStep
      vessel="reactor1"
      ramp_temp="{'high': '100.0 °C', 'low_temp': '20.0 °C'}" />
  </Procedure>

</Synthesis>

</XDL>
