<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="reactor_1"
      type="reactor" />
    <Component
      id="reactor_2"
      type="reactor" />
    <Component
      id="reactor_3"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="H3PO4"
      id="H3PO4"
      role="reagent" />
    <Reagent
      name="HCl"
      id="HCl"
      role="reagent" />
    <Reagent
      name="KCl"
      id="KCl"
      role="reagent" />
    <Reagent
      name="Na2MoO4·2H2O"
      id="Na2MoO4·2H2O"
      role="reagent" />
    <Reagent
      name="diethyl ether"
      id="diethyl ether"
      role="reagent" />
    <Reagent
      name="distilled water"
      id="distilled water"
      role="reagent" />
    <Reagent
      name="ethanol"
      id="ethanol"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor_1"
      reagent="distilled water"
      volume="50.0 mL"
      amount="50.0 mL" />
    <Add
      vessel="reactor_1"
      reagent="Na2MoO4·2H2O"
      mass="20.0 g"
      amount="20.0 g" />
    <Add
      vessel="reactor_1"
      reagent="H3PO4"
      volume="3.0 mL"
      amount="3.0 mL" />
    <Add
      vessel="reactor_1"
      reagent="HCl"
      volume="16.5 mL"
      amount="16.5 mL" />
    <HeatChill
      vessel="reactor_1"
      time="28800.0 second"
      temp="100.0 °C" />
    <HeatChillToTemp
      vessel="reactor_1"
      temp="20.0 °C"
      stir="False" />
    <Add
      vessel="reactor_1"
      reagent="KCl"
      mass="20.0 g"
      amount="20.0 g" />
    <HeatChill
      vessel="reactor_1"
      time="overnight"
      temp="5.0 °C"
      stir="False" />
    <Filter
      vessel="reactor_1"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 °C" />
    <Add
      vessel="reactor_2"
      reagent="distilled water"
      volume="minimum amount"
      amount="minimum amount" />
    <Transfer
      from_vessel="reactor_1"
      to_vessel="reactor_2"
      amount="all"
      solid="True" />
    <Filter
      vessel="reactor_2"
      filtrate_vessel="reactor_3"
      stir="False"
      temp="20.0 °C" />
    <Add
      vessel="reactor_3"
      reagent="KCl"
      mass="10.0 g"
      amount="10.0 g" />
    <HeatChill
      vessel="reactor_3"
      time="overnight"
      temp="5.0 °C"
      stir="False" />
    <WashSolid
      vessel="reactor_3"
      solvent="ethanol"
      volume="10.0 mL"
      filtrate_vessel="waste"
      stir="False"
      repeats="3" />
    <WashSolid
      vessel="reactor_3"
      solvent="diethyl ether"
      volume="10.0 mL"
      filtrate_vessel="waste"
      stir="False"
      repeats="3" />
    <Dry
      vessel="reactor_3"
      time="900.0 second"
      pressure="1 bar"
      temp="20.0 °C" />
  </Procedure>

</Synthesis>

</XDL>
