<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="autoclave_1"
      type="reactor" />
    <Component
      id="reactor_1"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="(CH3)4NOH·5H2O"
      id="(CH3)4NOH·5H2O"
      role="reagent" />
    <Reagent
      name="BTC"
      id="BTC"
      role="reagent" />
    <Reagent
      name="Cu(NO3)2·3H2O"
      id="Cu(NO3)2·3H2O"
      role="reagent" />
    <Reagent
      name="H4[PMo11VO40]·xH2O"
      id="H4[PMo11VO40]·xH2O"
      role="reagent" />
    <Reagent
      name="distilled water"
      id="distilled water"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor_1"
      reagent="distilled water"
      volume="100.0 mL"
      amount="100.0 mL" />
    <Add
      vessel="reactor_1"
      reagent="Cu(NO3)2·3H2O"
      mass="2.4 g"
      amount="2.4 g" />
    <Add
      vessel="reactor_1"
      reagent="H4[PMo11VO40]·xH2O"
      mass="2.0 g"
      amount="2.0 g" />
    <StartStir
      vessel="reactor_1"
      stir_speed="vigorously" />
    <Wait
      time="600.0 second" />
    <Add
      vessel="reactor_1"
      reagent="BTC"
      mass="2.1 g"
      stir="True"
      amount="2.1 g" />
    <Add
      vessel="reactor_1"
      reagent="(CH3)4NOH·5H2O"
      mass="3.6 g"
      stir="True"
      amount="3.6 g" />
    <Wait
      time="600.0 second" />
    <Transfer
      from_vessel="reactor_1"
      to_vessel="autoclave_1"
      volume="all"
      amount="all" />
    <HeatChill
      vessel="autoclave_1"
      time="86400.0 second"
      temp="180.0 °C"
      stir="False" />
    <HeatChillToTemp
      vessel="autoclave_1"
      temp="20.0 °C"
      stir="False" />
    <Filter
      vessel="autoclave_1"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 °C" />
  </Procedure>

</Synthesis>

</XDL>
