<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="reactor1"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="H2O"
      id="H2O"
      role="reagent" />
    <Reagent
      name="HNO3"
      id="HNO3"
      role="reagent" />
    <Reagent
      name="K8[γ-SiW10O36]·12H2O"
      id="K8[γ-SiW10O36]·12H2O"
      role="reagent" />
    <Reagent
      name="[(n-C4H9)4N]Br"
      id="[(n-C4H9)4N]Br"
      role="reagent" />
    <Reagent
      name="{'acid': 'HNO3', 'base': 'None'}"
      id="{'acid': 'HNO3', 'base': 'None'}"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor1"
      reagent="K8[γ-SiW10O36]·12H2O"
      mass="6.0 g"
      amount="6.0 g" />
    <Add
      vessel="reactor1"
      reagent="H2O"
      volume="60.0 mL"
      amount="60.0 mL" />
    <AdjustPH
      vessel="reactor1"
      reagent="{'acid': 'HNO3', 'base': 'None'}"
      pH="2.0" />
    <Stir
      vessel="reactor1"
      time="900.0 second"
      stir_speed="300.0 rpm" />
    <Add
      vessel="reactor1"
      reagent="[(n-C4H9)4N]Br"
      mass="excess"
      amount="excess" />
    <Filter
      vessel="reactor1"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 °C" />
    <WashSolid
      vessel="reactor1"
      solvent="H2O"
      volume="excess"
      filtrate_vessel="waste"
      stir="False" />
    <Dry
      vessel="reactor1"
      time="900.0 second"
      pressure="1 bar"
      temp="20.0 °C" />
    <Precipitate
      vessel="reactor1"
      temp="20.0 °C" />
    <Filter
      vessel="reactor1"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 °C" />
    <WashSolid
      vessel="reactor1"
      solvent="H2O"
      volume="excess"
      filtrate_vessel="waste"
      stir="False" />
    <Precipitate
      vessel="reactor1"
      temp="20.0 °C" />
    <Filter
      vessel="reactor1"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 °C" />
    <WashSolid
      vessel="reactor1"
      solvent="H2O"
      volume="excess"
      filtrate_vessel="waste"
      stir="False" />
  </Procedure>

</Synthesis>

</XDL>
