<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="Teflon-lined autoclave"
      type="reactor" />
    <Component
      id="reactor_1"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="4,4′-bipy"
      id="4,4′-bipy"
      role="reagent" />
    <Reagent
      name="CuCl2 ·2H2O"
      id="CuCl2 ·2H2O"
      role="reagent" />
    <Reagent
      name="H2O"
      id="H2O"
      role="reagent" />
    <Reagent
      name="H3PO4"
      id="H3PO4"
      role="reagent" />
    <Reagent
      name="MoO3"
      id="MoO3"
      role="reagent" />
    <Reagent
      name="NaOH (1.0 mol/L)"
      id="NaOH (1.0 mol/L)"
      role="reagent" />
    <Reagent
      name="distilled water"
      id="distilled water"
      role="reagent" />
    <Reagent
      name="{'acid': 'None', 'base': 'NaOH (1.0 mol/L)'}"
      id="{'acid': 'None', 'base': 'NaOH (1.0 mol/L)'}"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor_1"
      reagent="MoO3"
      mass="0.043000000000000003 g"
      amount="0.043000000000000003 g" />
    <Add
      vessel="reactor_1"
      reagent="CuCl2 ·2H2O"
      mass="0.10200000000000001 g"
      amount="0.10200000000000001 g" />
    <Add
      vessel="reactor_1"
      reagent="4,4′-bipy"
      mass="0.094 g"
      amount="0.094 g" />
    <Add
      vessel="reactor_1"
      reagent="H3PO4"
      volume="0.30000000000000004 mL"
      amount="0.30000000000000004 mL" />
    <Add
      vessel="reactor_1"
      reagent="H2O"
      volume="5.0 mL"
      amount="5.0 mL" />
    <AdjustPH
      vessel="reactor_1"
      reagent="{'acid': 'None', 'base': 'NaOH (1.0 mol/L)'}"
      pH="3.7" />
    <Transfer
      from_vessel="reactor_1"
      to_vessel="Teflon-lined autoclave"
      volume="all"
      amount="all" />
    <HeatChill
      vessel="Teflon-lined autoclave"
      time="432000.0 second"
      temp="180.0 °C"
      stir="False" />
    <Filter
      vessel="Teflon-lined autoclave"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 °C" />
    <WashSolid
      vessel="Teflon-lined autoclave"
      solvent="distilled water"
      volume="appropriate"
      filtrate_vessel="waste"
      stir="False" />
    <Dry
      vessel="Teflon-lined autoclave"
      time="900.0 second"
      pressure="1 bar"
      temp="20.0 °C" />
  </Procedure>

</Synthesis>

</XDL>
