<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="autoclave"
      type="reactor" />
    <Component
      id="reactor1"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="(NH4)6Mo7O24·4H2O"
      id="(NH4)6Mo7O24·4H2O"
      role="reagent" />
    <Reagent
      name="CuSO4·5H2O"
      id="CuSO4·5H2O"
      role="reagent" />
    <Reagent
      name="H2O"
      id="H2O"
      role="reagent" />
    <Reagent
      name="L1"
      id="L1"
      role="reagent" />
    <Reagent
      name="{'acid': 'None', 'base': 'None'}"
      id="{'acid': 'None', 'base': 'None'}"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor1"
      reagent="(NH4)6Mo7O24·4H2O"
      mass="0.251 g"
      amount="0.251 g" />
    <Add
      vessel="reactor1"
      reagent="CuSO4·5H2O"
      mass="0.025 g"
      amount="0.025 g" />
    <Add
      vessel="reactor1"
      reagent="L1"
      mass="0.029 g"
      amount="0.029 g" />
    <Add
      vessel="reactor1"
      reagent="H2O"
      volume="10.0 mL"
      amount="10.0 mL" />
    <Stir
      vessel="reactor1"
      time="1800.0 second"
      stir_speed="300.0 rpm" />
    <AdjustPH
      vessel="reactor1"
      reagent="{'acid': 'None', 'base': 'None'}"
      pH="2.0" />
    <Transfer
      from_vessel="reactor1"
      to_vessel="autoclave"
      volume="all"
      amount="all" />
    <HeatChill
      vessel="autoclave"
      time="259200.0 second"
      temp="150.0 °C"
      stir="False" />
    <HeatChillToTemp
      vessel="autoclave"
      temp="100.0 °C"
      stir="False" />
    <HeatChill
      vessel="autoclave"
      time="28800.0 second"
      temp="100.0 °C"
      stir="False" />
    <HeatChillToTemp
      vessel="autoclave"
      temp="30.0 °C"
      stir="False" />
  </Procedure>

</Synthesis>

</XDL>
