<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="Teflon-lined stainless steel vessel"
      type="reactor" />
    <Component
      id="reactor1"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="4-tpt"
      id="4-tpt"
      role="reagent" />
    <Reagent
      name="MnSO4·H2O"
      id="MnSO4·H2O"
      role="reagent" />
    <Reagent
      name="MoO3"
      id="MoO3"
      role="reagent" />
    <Reagent
      name="water"
      id="water"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor1"
      reagent="MnSO4·H2O"
      mass="appropriate"
      amount="appropriate" />
    <Add
      vessel="reactor1"
      reagent="MoO3"
      mass="appropriate"
      amount="appropriate" />
    <Add
      vessel="reactor1"
      reagent="4-tpt"
      mass="appropriate"
      amount="appropriate" />
    <Add
      vessel="reactor1"
      reagent="water"
      volume="8.0 mL"
      stir="True"
      amount="8.0 mL" />
    <Stir
      vessel="reactor1"
      time="1800.0 second"
      stir_speed="300.0 rpm" />
    <Transfer
      from_vessel="reactor1"
      to_vessel="Teflon-lined stainless steel vessel"
      volume="all"
      amount="all" />
    <HeatChill
      vessel="Teflon-lined stainless steel vessel"
      time="259200.0 second"
      temp="180.0 °C"
      stir="False" />
  </Procedure>

</Synthesis>

</XDL>
