<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="Teflon-lined reactor"
      type="reactor" />
    <Component
      id="reactor1"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="2M HNO3 (2.0 mol/L)"
      id="2M HNO3 (2.0 mol/L)"
      role="reagent" />
    <Reagent
      name="AgNO3"
      id="AgNO3"
      role="reagent" />
    <Reagent
      name="H2O"
      id="H2O"
      role="reagent" />
    <Reagent
      name="Na2SiO3·9H2O"
      id="Na2SiO3·9H2O"
      role="reagent" />
    <Reagent
      name="Na2WO4·2H2O"
      id="Na2WO4·2H2O"
      role="reagent" />
    <Reagent
      name="phnz"
      id="phnz"
      role="reagent" />
    <Reagent
      name="{'acid': '2M HNO3 (2.0 mol/L)', 'base': 'None'}"
      id="{'acid': '2M HNO3 (2.0 mol/L)', 'base': 'None'}"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor1"
      reagent="Na2WO4·2H2O"
      mass="appropriate"
      amount="appropriate" />
    <Add
      vessel="reactor1"
      reagent="Na2SiO3·9H2O"
      mass="appropriate"
      amount="appropriate" />
    <Add
      vessel="reactor1"
      reagent="AgNO3"
      mass="appropriate"
      amount="appropriate" />
    <Add
      vessel="reactor1"
      reagent="phnz"
      mass="appropriate"
      amount="appropriate" />
    <Add
      vessel="reactor1"
      reagent="H2O"
      volume="10.0 mL"
      stir="True"
      stir_speed="300.0 rpm"
      amount="10.0 mL" />
    <Stir
      vessel="reactor1"
      time="3600.0 second"
      stir_speed="300.0 rpm" />
    <AdjustPH
      vessel="reactor1"
      reagent="{'acid': '2M HNO3 (2.0 mol/L)', 'base': 'None'}"
      pH="{'min': 2.8, 'max': 3.2}" />
    <Transfer
      from_vessel="reactor1"
      to_vessel="Teflon-lined reactor"
      volume="all"
      amount="all" />
    <HeatChill
      vessel="Teflon-lined reactor"
      time="345600.0 second"
      temp="170.0 °C"
      stir="False" />
    <Filter
      vessel="Teflon-lined reactor"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 °C" />
    <WashSolid
      vessel="Teflon-lined reactor"
      solvent="H2O"
      volume="appropriate"
      filtrate_vessel="waste"
      stir="False" />
    <Dry
      vessel="Teflon-lined reactor"
      time="900.0 second"
      pressure="1 bar"
      temp="20.0 °C" />
  </Procedure>

</Synthesis>

</XDL>
