<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="autoclave"
      type="reactor" />
    <Component
      id="reactor1"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="CuCl2·2H2O"
      id="CuCl2·2H2O"
      role="reagent" />
    <Reagent
      name="H2C2O4"
      id="H2C2O4"
      role="reagent" />
    <Reagent
      name="H2O"
      id="H2O"
      role="reagent" />
    <Reagent
      name="H3BO3"
      id="H3BO3"
      role="reagent" />
    <Reagent
      name="Na2WO4·2H2O"
      id="Na2WO4·2H2O"
      role="reagent" />
    <Reagent
      name="bpp"
      id="bpp"
      role="reagent" />
    <Reagent
      name="{'acid': 'H2C2O4', 'base': 'None'}"
      id="{'acid': 'H2C2O4', 'base': 'None'}"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor1"
      reagent="H3BO3"
      mass="0.037 g"
      amount="0.037 g" />
    <Add
      vessel="reactor1"
      reagent="Na2WO4·2H2O"
      mass="1.0 g"
      amount="1.0 g" />
    <Add
      vessel="reactor1"
      reagent="CuCl2·2H2O"
      mass="0.052000000000000005 g"
      amount="0.052000000000000005 g" />
    <Add
      vessel="reactor1"
      reagent="bpp"
      mass="0.059000000000000004 g"
      amount="0.059000000000000004 g" />
    <Add
      vessel="reactor1"
      reagent="H2O"
      volume="18.0 mL"
      stir="True"
      stir_speed="300.0 rpm"
      amount="18.0 mL" />
    <AdjustPH
      vessel="reactor1"
      reagent="{'acid': 'H2C2O4', 'base': 'None'}"
      pH="4.8" />
    <Transfer
      from_vessel="reactor1"
      to_vessel="autoclave"
      volume="all"
      amount="all" />
    <HeatChill
      vessel="autoclave"
      time="432000.0 second"
      temp="165.0 °C"
      stir="False" />
  </Procedure>

</Synthesis>

</XDL>
