<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="autoclave"
      type="reactor" />
    <Component
      id="reactor_1"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="CuCl"
      id="CuCl"
      role="reagent" />
    <Reagent
      name="CuCl₂ (0.01 mol/L)"
      id="CuCl₂ (0.01 mol/L)"
      role="reagent" />
    <Reagent
      name="NaOH (1.0 mol/L)"
      id="NaOH (1.0 mol/L)"
      role="reagent" />
    <Reagent
      name="ascorbic acid"
      id="ascorbic acid"
      role="reagent" />
    <Reagent
      name="cetyltrimethylammonium chloride"
      id="cetyltrimethylammonium chloride"
      role="reagent" />
    <Reagent
      name="ethanol"
      id="ethanol"
      role="reagent" />
    <Reagent
      name="water"
      id="water"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor_1"
      reagent="CuCl"
      mass="0.01 g"
      stir="True"
      amount="0.01 g" />
    <Add
      vessel="reactor_1"
      reagent="CuCl₂ (0.01 mol/L)"
      volume="1.0 mL"
      stir="True"
      amount="1.0 mL" />
    <Add
      vessel="reactor_1"
      reagent="water"
      volume="25.0 mL"
      stir="True"
      amount="25.0 mL" />
    <Add
      vessel="reactor_1"
      reagent="ascorbic acid"
      mass="0.088 g"
      stir="True"
      amount="0.088 g" />
    <Add
      vessel="reactor_1"
      reagent="cetyltrimethylammonium chloride"
      mass="0.032 g"
      stir="True"
      amount="0.032 g" />
    <Stir
      vessel="reactor_1"
      time="10.0 min"
      stir_speed="vigorously" />
    <Add
      vessel="reactor_1"
      reagent="NaOH (1.0 mol/L)"
      volume="0.5 mL"
      dropwise="True"
      stir="True"
      amount="0.5 mL" />
    <Stir
      vessel="reactor_1"
      time="10.0 min"
      stir_speed="vigorously" />
    <Transfer
      from_vessel="reactor_1"
      to_vessel="autoclave"
      volume="all"
      amount="all" />
    <HeatChill
      vessel="autoclave"
      time="2.0 h"
      temp="120.0 ℃"
      stir="False" />
    <HeatChillToTemp
      vessel="autoclave"
      temp="20.0 ℃"
      stir="False" />
    <Filter
      vessel="autoclave"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 ℃" />
    <WashSolid
      vessel="autoclave"
      solvent="water"
      volume="appropriate"
      filtrate_vessel="waste"
      stir="False" />
    <WashSolid
      vessel="autoclave"
      solvent="ethanol"
      volume="appropriate"
      filtrate_vessel="waste"
      stir="False" />
    <Dry
      vessel="autoclave"
      time="8.0 h"
      pressure="1 bar"
      temp="50.0 ℃" />
  </Procedure>

</Synthesis>

</XDL>
