<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="reactor_1"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="2M H2SO4 (2.0 mol/L)"
      id="2M H2SO4 (2.0 mol/L)"
      role="reagent" />
    <Reagent
      name="CuCl2 ·2H2O"
      id="CuCl2 ·2H2O"
      role="reagent" />
    <Reagent
      name="Na2WO4 ·2H2O"
      id="Na2WO4 ·2H2O"
      role="reagent" />
    <Reagent
      name="bim"
      id="bim"
      role="reagent" />
    <Reagent
      name="distilled water"
      id="distilled water"
      role="reagent" />
    <Reagent
      name="{'acid': '2M H2SO4 (2.0 mol/L)', 'base': 'None'}"
      id="{'acid': '2M H2SO4 (2.0 mol/L)', 'base': 'None'}"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor_1"
      reagent="Na2WO4 ·2H2O"
      mass="3.3 g"
      amount="3.3 g" />
    <Add
      vessel="reactor_1"
      reagent="CuCl2 ·2H2O"
      mass="0.422 g"
      amount="0.422 g" />
    <Add
      vessel="reactor_1"
      reagent="bim"
      mass="0.19 g"
      amount="0.19 g" />
    <Add
      vessel="reactor_1"
      reagent="distilled water"
      volume="40.0 mL"
      amount="40.0 mL" />
    <HeatChillToTemp
      vessel="reactor_1"
      temp="85.0 °C"
      stir_speed="300.0 rpm" />
    <Stir
      vessel="reactor_1"
      time="1800.0 second"
      stir_speed="300.0 rpm" />
    <AdjustPH
      vessel="reactor_1"
      reagent="{'acid': '2M H2SO4 (2.0 mol/L)', 'base': 'None'}"
      pH="5.0" />
    <HeatChillToTemp
      vessel="reactor_1"
      temp="20.0 °C"
      stir="False" />
    <Filter
      vessel="reactor_1"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 °C" />
    <Wait
      time="1814400.0 second" />
  </Procedure>

</Synthesis>

</XDL>
