<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="reactor1"
      type="reactor" />
    <Component
      id="reactor2"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="HCl (4.0 mol/L)"
      id="HCl (4.0 mol/L)"
      role="reagent" />
    <Reagent
      name="Na2MoO4·2H2O"
      id="Na2MoO4·2H2O"
      role="reagent" />
    <Reagent
      name="copper(II) chloride (1.0 mol/L)"
      id="copper(II) chloride (1.0 mol/L)"
      role="reagent" />
    <Reagent
      name="distilled water"
      id="distilled water"
      role="reagent" />
    <Reagent
      name="ethylenediamine (0.30000000000000004 mol/L)"
      id="ethylenediamine (0.30000000000000004 mol/L)"
      role="reagent" />
    <Reagent
      name="sodium dihydrogen phosphate (0.5 mol/L)"
      id="sodium dihydrogen phosphate (0.5 mol/L)"
      role="reagent" />
    <Reagent
      name="{'acid': 'HCl (4.0 mol/L)', 'base': 'None'}"
      id="{'acid': 'HCl (4.0 mol/L)', 'base': 'None'}"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor1"
      reagent="Na2MoO4·2H2O"
      mass="2.42 g"
      stir="True"
      stir_speed="300.0 rpm"
      amount="2.42 g" />
    <Add
      vessel="reactor1"
      reagent="distilled water"
      volume="35.0 mL"
      stir="True"
      stir_speed="300.0 rpm"
      amount="35.0 mL" />
    <Add
      vessel="reactor1"
      reagent="sodium dihydrogen phosphate (0.5 mol/L)"
      volume="13.5 mL"
      dropwise="True"
      stir="True"
      stir_speed="300.0 rpm"
      amount="13.5 mL" />
    <Add
      vessel="reactor1"
      reagent="copper(II) chloride (1.0 mol/L)"
      volume="10.0 mL"
      dropwise="True"
      stir="True"
      stir_speed="300.0 rpm"
      amount="10.0 mL" />
    <Add
      vessel="reactor1"
      reagent="ethylenediamine (0.30000000000000004 mol/L)"
      volume="5.0 mL"
      dropwise="True"
      stir="True"
      stir_speed="300.0 rpm"
      amount="5.0 mL" />
    <AdjustPH
      vessel="reactor1"
      reagent="{'acid': 'HCl (4.0 mol/L)', 'base': 'None'}"
      pH="5.5"
      stir_speed="300.0 rpm" />
    <HeatChill
      vessel="reactor1"
      time="1.0 hours"
      temp="85.0 ℃"
      stir_speed="300.0 rpm" />
    <Filter
      vessel="reactor1"
      filtrate_vessel="reactor2"
      stir="False"
      temp="85.0 ℃" />
    <HeatChillToTemp
      vessel="reactor2"
      temp="20.0 ℃"
      stir="False" />
  </Procedure>

</Synthesis>

</XDL>
