<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="reactor_1"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="CuCl2·2H2O"
      id="CuCl2·2H2O"
      role="reagent" />
    <Reagent
      name="HCl (4.0 M)"
      id="HCl (4.0 M)"
      role="reagent" />
    <Reagent
      name="Na2HPO4·12H2O"
      id="Na2HPO4·12H2O"
      role="reagent" />
    <Reagent
      name="Na2MoO4·2H2O"
      id="Na2MoO4·2H2O"
      role="reagent" />
    <Reagent
      name="distilled water"
      id="distilled water"
      role="reagent" />
    <Reagent
      name="ethylenediamine"
      id="ethylenediamine"
      role="reagent" />
    <Reagent
      name="{'acid': 'HCl (4.0 M)', 'base': 'None'}"
      id="{'acid': 'HCl (4.0 M)', 'base': 'None'}"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor_1"
      reagent="Na2MoO4·2H2O"
      mass="2.42 g"
      amount="2.42 g" />
    <Add
      vessel="reactor_1"
      reagent="Na2HPO4·12H2O"
      mass="2.4 g"
      amount="2.4 g" />
    <Add
      vessel="reactor_1"
      reagent="CuCl2·2H2O"
      mass="1.71 g"
      amount="1.71 g" />
    <Add
      vessel="reactor_1"
      reagent="ethylenediamine"
      volume="0.1 mL"
      amount="0.1 mL" />
    <Add
      vessel="reactor_1"
      reagent="distilled water"
      volume="60.0 mL"
      stir="True"
      amount="60.0 mL" />
    <AdjustPH
      vessel="reactor_1"
      reagent="{'acid': 'HCl (4.0 M)', 'base': 'None'}"
      pH="5.5" />
    <HeatChillToTemp
      vessel="reactor_1"
      temp="85.0 ℃" />
    <Wait
      time="1.0 hours" />
    <Filter
      vessel="reactor_1"
      filtrate_vessel="waste"
      stir="False"
      temp="85.0 ℃" />
  </Procedure>

</Synthesis>

</XDL>
