<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="reactor_1"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="Na2MoO4 2H2O"
      id="Na2MoO4 2H2O"
      role="reagent" />
    <Reagent
      name="Na2S2O4"
      id="Na2S2O4"
      role="reagent" />
    <Reagent
      name="hydrochloric acid (32.0 %)"
      id="hydrochloric acid (32.0 %)"
      role="reagent" />
    <Reagent
      name="water"
      id="water"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor_1"
      reagent="water"
      volume="25.0 mL"
      amount="25.0 mL" />
    <Add
      vessel="reactor_1"
      reagent="Na2MoO4 2H2O"
      mass="3.04 g"
      stir="True"
      amount="3.04 g" />
    <Add
      vessel="reactor_1"
      reagent="hydrochloric acid (32.0 %)"
      volume="2.7 mL"
      stir="True"
      amount="2.7 mL" />
    <Add
      vessel="reactor_1"
      reagent="Na2S2O4"
      mass="0.15 g"
      stir="True"
      amount="0.15 g" />
    <HeatChill
      vessel="reactor_1"
      time="1.0 days"
      temp="20.0 ℃"
      stir="False" />
    <Filter
      vessel="reactor_1"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 ℃" />
    <WashSolid
      vessel="reactor_1"
      solvent="water"
      volume="small amount"
      filtrate_vessel="waste"
      temp="0.0 ℃"
      stir="False" />
    <Dry
      vessel="reactor_1"
      pressure="1 bar"
      temp="20.0 ℃" />
  </Procedure>

</Synthesis>

</XDL>
