<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="glass_beaker"
      type="reactor" />
    <Component
      id="reactor_1"
      type="reactor" />
    <Component
      id="reactor_2"
      type="reactor" />
    <Component
      id="reactor_3"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="H2IDA"
      id="H2IDA"
      role="reagent" />
    <Reagent
      name="La(NO3)3·6H2O"
      id="La(NO3)3·6H2O"
      role="reagent" />
    <Reagent
      name="NaOH (1.0 M)"
      id="NaOH (1.0 M)"
      role="reagent" />
    <Reagent
      name="Ni(NO3)2·6H2O"
      id="Ni(NO3)2·6H2O"
      role="reagent" />
    <Reagent
      name="distilled water"
      id="distilled water"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor_1"
      reagent="La(NO3)3·6H2O"
      mass="1.0 mmol"
      amount="1.0 mmol" />
    <Add
      vessel="reactor_1"
      reagent="Ni(NO3)2·6H2O"
      mass="1.0 mmol"
      amount="1.0 mmol" />
    <Add
      vessel="reactor_1"
      reagent="H2IDA"
      mass="1.0 mmol"
      amount="1.0 mmol" />
    <Add
      vessel="reactor_1"
      reagent="distilled water"
      volume="5.0 mL"
      amount="5.0 mL" />
    <HeatChillToTemp
      vessel="reactor_1"
      temp="80.0 ℃" />
    <Add
      vessel="reactor_1"
      reagent="NaOH (1.0 M)"
      volume="3.5 mL"
      stir="True"
      amount="3.5 mL" />
    <Add
      vessel="reactor_2"
      reagent="La(NO3)3·6H2O"
      mass="2.0 mmol"
      amount="2.0 mmol" />
    <Add
      vessel="reactor_2"
      reagent="Ni(NO3)2·6H2O"
      mass="4.0 mmol"
      amount="4.0 mmol" />
    <Add
      vessel="reactor_2"
      reagent="H2IDA"
      mass="4.0 mmol"
      amount="4.0 mmol" />
    <Add
      vessel="reactor_2"
      reagent="distilled water"
      volume="10.0 mL"
      amount="10.0 mL" />
    <Transfer
      from_vessel="reactor_2"
      to_vessel="reactor_3"
      volume="0.2 mL"
      amount="0.2 mL" />
    <Add
      vessel="reactor_3"
      reagent="NaOH (1.0 M)"
      volume="0.36 mL"
      stir="True"
      amount="0.36 mL" />
    <Transfer
      from_vessel="reactor_3"
      to_vessel="reactor_1"
      volume="all"
      amount="all" />
    <Stir
      vessel="reactor_1"
      time="2.0 hours"
      stir_speed="300.0 rpm" />
    <Filter
      vessel="reactor_1"
      filtrate_vessel="glass_beaker"
      stir="False"
      temp="20.0 ℃" />
    <HeatChill
      vessel="glass_beaker"
      time="1.0 night"
      temp="20.0 ℃"
      stir="False" />
    <Filter
      vessel="glass_beaker"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 ℃" />
    <Dry
      vessel="glass_beaker"
      pressure="1 bar"
      temp="20.0 ℃" />
  </Procedure>

</Synthesis>

</XDL>
