<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="reactor_1"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="H2PdCl4 (0.01 mol/L)"
      id="H2PdCl4 (0.01 mol/L)"
      role="reagent" />
    <Reagent
      name="HAuCl4 (0.01 mol/L)"
      id="HAuCl4 (0.01 mol/L)"
      role="reagent" />
    <Reagent
      name="OTAC (0.01 mol/L)"
      id="OTAC (0.01 mol/L)"
      role="reagent" />
    <Reagent
      name="sodium ascorbate (20.0 mg/mL)"
      id="sodium ascorbate (20.0 mg/mL)"
      role="reagent" />
    <Reagent
      name="water"
      id="water"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor_1"
      reagent="H2PdCl4 (0.01 mol/L)"
      volume="0.30000000000000004 mL"
      amount="0.30000000000000004 mL" />
    <Add
      vessel="reactor_1"
      reagent="HAuCl4 (0.01 mol/L)"
      volume="0.7000000000000001 mL"
      amount="0.7000000000000001 mL" />
    <Add
      vessel="reactor_1"
      reagent="OTAC (0.01 mol/L)"
      volume="50.0 mL"
      amount="50.0 mL" />
    <Stir
      vessel="reactor_1"
      time="10.0 min"
      stir_speed="300.0 rpm" />
    <Add
      vessel="reactor_1"
      reagent="sodium ascorbate (20.0 mg/mL)"
      volume="1.0 mL"
      stir="True"
      stir_speed="500.0 rpm"
      amount="1.0 mL" />
    <Stir
      vessel="reactor_1"
      time="4.0 hours"
      stir_speed="0.0 rpm" />
    <Centrifugate
      vessel="reactor_1"
      rotation_speed="12000.0 rpm" />
    <WashSolid
      vessel="reactor_1"
      solvent="water"
      volume="appropriate"
      filtrate_vessel="waste"
      stir="False"
      repeats="2" />
    <Dry
      vessel="reactor_1"
      time="15.0 minute"
      pressure="1 bar"
      temp="20.0 ℃" />
    <HeatChillToTemp
      vessel="reactor_1"
      temp="4.0 ℃"
      stir="False" />
  </Procedure>

</Synthesis>

</XDL>
