<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="reactor_1"
      type="reactor" />
    <Component
      id="waste"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="FeCl3"
      id="FeCl3"
      role="reagent" />
    <Reagent
      name="Na2MoO4.2H2O"
      id="Na2MoO4.2H2O"
      role="reagent" />
    <Reagent
      name="acetic acid (100.0 %)"
      id="acetic acid (100.0 %)"
      role="reagent" />
    <Reagent
      name="water"
      id="water"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor_1"
      reagent="water"
      volume="25.0 mL"
      amount="25.0 mL" />
    <Add
      vessel="reactor_1"
      reagent="acetic acid (100.0 %)"
      volume="15.0 mL"
      amount="15.0 mL" />
    <Add
      vessel="reactor_1"
      reagent="Na2MoO4.2H2O"
      mass="12.3 mmol"
      amount="12.3 mmol" />
    <Add
      vessel="reactor_1"
      reagent="FeCl3"
      mass="7.7 mmol"
      stir="True"
      stir_speed="500.0 rpm"
      amount="7.7 mmol" />
    <Precipitate
      vessel="reactor_1"
      temp="20.0 ℃"
      time="30.0 min"
      stir_speed="500.0 rpm" />
    <Filter
      vessel="reactor_1"
      filtrate_vessel="waste"
      stir="False"
      temp="20.0 ℃" />
    <WashSolid
      vessel="reactor_1"
      solvent="water"
      volume="appropriate"
      filtrate_vessel="waste"
      stir="False" />
    <Dry
      vessel="reactor_1"
      pressure="1 bar"
      temp="20.0 ℃" />
  </Procedure>

</Synthesis>

</XDL>
