<?xdl version="2.0.0" ?>
<XDL>

<Synthesis>

  <Hardware>
    <Component
      id="reactor_1"
      type="reactor" />
  </Hardware>

  <Reagents>
    <Reagent
      name="CuCl2"
      id="CuCl2"
      role="reagent" />
    <Reagent
      name="[DF-CBA]Cl"
      id="[DF-CBA]Cl"
      role="reagent" />
    <Reagent
      name="methanol"
      id="methanol"
      role="reagent" />
  </Reagents>

  <Procedure>
    <Add
      vessel="reactor_1"
      reagent="[DF-CBA]Cl"
      mass="10.0 mmol"
      amount="10.0 mmol" />
    <Add
      vessel="reactor_1"
      reagent="CuCl2"
      mass="5.0 mmol"
      amount="5.0 mmol" />
    <Add
      vessel="reactor_1"
      reagent="methanol"
      volume="100.0 mL"
      stir="True"
      stir_speed="300.0 rpm"
      amount="100.0 mL" />
    <Evaporate
      vessel="reactor_1"
      temp="20.0 ℃" />
  </Procedure>

</Synthesis>

</XDL>
